PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': 'name', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['D:\\Code\\psycho\\baste\\cards.xlsx', 'D:\\Code\\psycho\\baste\\cond1.jpg', 'D:\\Code\\psycho\\baste\\cond2a.jpg', 'D:\\Code\\psycho\\baste\\cond2b.jpg', 'D:\\Code\\psycho\\baste\\cond3.jpg', 'D:\\Code\\psycho\\baste\\cond4a.jpg', 'D:\\Code\\psycho\\baste\\cond4b.jpg', 'D:\\Code\\psycho\\baste\\transfer.xlsx']
  Save log file = False
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = swahili
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Routines
  Routine card_gen
    CodeComponent input_vocab
      Code Type = Both
      Begin JS Routine:
        waiting.push([swa, eng]);
      Begin Routine:
        waiting.append([swa,eng])
  Routine choice
    MouseComponent choose_pile
      clickable = study_pile,test_pile,done_pile,unsorted_card
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent unsorted_card
      fillColor = $[1,1,1]
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.6, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent study_pile
      fillColor = $[1,1,1]
      pos = (0.5, 0.5)
      shape = rectangle
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent test_pile
      fillColor = $[1,1,1]
      pos = (0.5, 0)
      shape = rectangle
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent done_pile
      fillColor = $[1,1,1]
      pos = (0.5, -0.5)
      shape = rectangle
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent study_pile_text
      color = black
      letterHeight = 0.1
      pos = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Study
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    TextComponent test_pile_text
      color = black
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = Test
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    TextComponent done_pile_text
      color = black
      letterHeight = 0.1
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      text = Done
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    TextComponent unsorted_vocab
      color = black
      letterHeight = 0.1
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $card_to_show
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    TextComponent instr_choice
      letterHeight = 0.1
      pos = (-0.3, 0.6)
      startVal [time (s)] = 0.0
      text = Click on the card on the left to see a word pair. Then click on the card to the right to choose what to do with that word pair.
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    VariableComponent study_size
      startRoutineValue = 1
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    VariableComponent test_size
      startRoutineValue = 1
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    VariableComponent done_size
      startRoutineValue = 1
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    VariableComponent unsorted_size
      startRoutineValue = 1
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    CodeComponent set_size_texts
      Code Type = Auto->JS
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      Begin Routine:
        study_size=("cards: "+str(len(study)))
        test_size=("cards: "+str(len(test)))
        done_size=("cards: "+str(size_at_start-len(waiting)))
        unsorted_size=("cards: "+str(len(waiting)-i))
    TextComponent study_size_text
      letterHeight = 0.1
      pos = [0.5,0.3]
      startVal [time (s)] = 0.0
      text [set every repeat] = $study_size
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    TextComponent test_size_text
      letterHeight = 0.1
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_size
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    TextComponent done_size_text
      letterHeight = 0.1
      pos = (0.5, -0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $done_size
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    TextComponent unsorted_size_text
      letterHeight = 0.1
      pos = (-0.4, -0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $unsorted_size
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  Routine pick_deck
    CodeComponent special_cases
      Code Type = JS
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      Each JS Frame:
        if (waiting.length === 0) {
            trials.finished = true;
            continueRoutine = false;
        } else {
            learn_method = "unknown";
            if (study.length === 0) {
                learn_method = "test";
                continueRoutine = false;
            } else {
                if (test.length === 0) {
                    learn_method = "study";
                    continueRoutine = false;
                }
            }
        }
    PolygonComponent study_first
      fillColor = $[1,1,1]
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent test_first
      fillColor = $[1,1,1]
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent study_first_text
      color = black
      letterHeight = 0.1
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = Study First
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    TextComponent test_first_text
      color = black
      letterHeight = 0.1
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = Test First
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    MouseComponent mouse_pick
      clickable = study_first,test_first
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent instr_pick
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Which would you like to do first?
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  Routine interpret_pick
    CodeComponent which_deck
      Code Type = JS
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      Begin JS Routine:
        if (learn_method === "unknown") {
            if (study_first.contains(mouse_pick)) {
                learn_method = "study";
            } else {
                learn_method = "test";
            }
        }
  Routine interpret_choice
    CodeComponent which_pile
      Code Type = JS
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      Begin JS Routine:
        if (card_to_show === "" && unsorted_card.contains(choose_pile)) {
            //english first!!
            card_to_show = waiting[i][1] + " - " + waiting[i][0];
        } else {
            if (card_to_show !== "") {
                psychoJS.experiment.addData("card_to_show", card_to_show);
                var placed = true;
                if (study_pile.contains(choose_pile)) {
                    study.push(waiting[i]);
                    i += 1;
                } else {
                    if (test_pile.contains(choose_pile)) {
                        test.push(waiting[i]);
                        i += 1;
                    } else {
                        if (done_pile.contains(choose_pile)) {
                            waiting.splice(i,1);
                        } else {
                            placed = false;
                        }
                    }
                }
                if (placed) {
                    if (study.length + test.length === waiting.length) {
                        choices.finished = true;
                    } else {
                        card_to_show = "";
                    }
                }
            }
        }
  Routine show_answer
    CodeComponent show
      Code Type = JS
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      Begin JS Routine:
        if (!(learn_method !== "test") || test.length === 0) {
            psychoJS.experiment.addData("test_response.stim", card_to_show);
            psychoJS.experiment.addData("test_response.resp", userinput);
            if (userinput === test[active_cards[card_index]][1]) {
                psychoJS.experiment.addData("test_response.eval", "correct");
            } else {
                psychoJS.experiment.addData("test_response.eval", "incorrect");
            }
            card_to_show = test[active_cards[card_index]][1] + " - " + test[active_cards[card_index]][0];
            active_cards.splice(card_index,1);
            if (no.contains(yes_or_no)) {
                continueRoutine = false;
            }
        }
      Each JS Frame:
        if (((learn_method !== "test") || (test.length === 0))) {
            continueRoutine = false;
        } else if (no.contains(yes_or_no)) {
                continueRoutine = false;
        }
    TextComponent correct_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $card_to_show
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    TextComponent user_text
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $("your answer: "+userinput)
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  Routine testing
    CodeComponent get_test_card
      Code Type = JS
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      Begin JS Routine:
        if (!(learn_method !== "test") || test.length === 0) {
            card_index = Math.floor(Math.random()*active_cards.length);
            card_to_show = test[active_cards[card_index]][1]; //show english
        }
      Each JS Frame:
        if (((learn_method !== "test") || (test.length === 0))) {
            test_loop.finished = true;
            continueRoutine = false;
        }
    CodeComponent input
      Code Type = JS
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      Begin JS Experiment:
        isalpha = function alphatest(chr) {
            return /[a-zA-Z]/.test(chr);
        }
      Begin JS Routine:
        psychoJS.eventManager.clearEvents("keyboard");
        userinput = "";
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys();
        if (keys.length > 0) {
            if ((isalpha(keys[0]) && (keys[0].length === 1))) {
                userinput += keys[0].toUpperCase();
            } else {
                if ((keys[0] === "backspace")) {
                    userinput = userinput.slice(0, (- 1));
                } else {
                    if ((keys[0] === "escape")) {
                        win.close();
                        psychoJS.quit();
                    } else {
                        if ((((keys[0] === "return") && ((psychoJS.monotonicClock.getTime() - duration_start) > 0.25)) && (userinput.length > 0))) {
                            continueRoutine = false;
                        }
                    }
                }
            }
        }
    PolygonComponent testcard
      fillColor = $[1,1,1]
      pos = (0, 0.2)
      shape = rectangle
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent text_box
      fillColor = $[1,1,1]
      pos = (0, -0.3)
      shape = rectangle
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent testcard_text
      color = black
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $card_to_show
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    TextComponent input_text
      color = black
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $userinput
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    CodeComponent testing_duration
      Code Type = JS
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      Begin JS Routine:
        duration_start = psychoJS.monotonicClock.getTime();
      End JS Routine:
        psychoJS.experiment.addData("duration", (psychoJS.monotonicClock.getTime() - duration_start));
  Routine studying
    CodeComponent get_study_card
      Code Type = JS
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      Begin JS Routine:
        if (learn_method === "study" && study.length !== 0) {
            card_index = Math.floor(Math.random()*active_cards.length);
            //english first
            card_to_show = study[active_cards[card_index]][1] + " - " + study[active_cards[card_index]][0];
            psychoJS.experiment.addData("card_to_show", card_to_show);
            active_cards.splice(card_index,1);
        }
      Each JS Frame:
        if (((learn_method !== "study") || (study.length === 0))) {
            study_loop.finished = true;
            continueRoutine = false;
        }
    PolygonComponent studycard
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent studycard_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $card_to_show
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    KeyboardComponent next_study
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine change_method
    CodeComponent flip
      Code Type = JS
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      Begin JS Routine:
        if (learn_method === "study") {
            learn_method = "test";
        } else if (learn_method === "test") {
                learn_method = "study";
        }
  Routine initialize_trial
    CodeComponent initialize
      Code Type = Auto->JS
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      Begin Routine:
        study = []
        test = []
        i=0
        card_to_show=""
        size_at_start=len(waiting)
  Routine init_active_cards
    CodeComponent init_active
      Code Type = JS
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      Begin JS Routine:
        if (learn_method === "study") {
            active_cards = [...Array(study.length).keys()];
        } else {
            active_cards = [...Array(test.length).keys()];
        }
  Routine ready
    TextComponent ready_to_continue
      color = $[0,1,0]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Participant ready to continue!
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    KeyboardComponent return_to_exp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine instr_study
    CodeComponent skip_instr_study
      Code Type = JS
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      Begin JS Routine:
        active_cards_length = active_cards.length;
      Each JS Frame:
        if (((learn_method !== "study") || (study.length === 0))) {
            continueRoutine = false;
        }
    TextComponent instr_study_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = For the study trials, you will see the English-Swahili translations one at a time. When you are ready to move on to the next trial, press "enter".
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    KeyboardComponent key_instr_study
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_test
    CodeComponent skip_instr_test
      Code Type = JS
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      Begin JS Routine:
        active_cards_length = active_cards.length;
      Each JS Frame:
        if (((learn_method !== "test") || (test.length === 0))) {
            continueRoutine = false;
        }
    TextComponent instr_test_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = For the test trials, please type in the Swahili translation for the English word. Select "enter" to move on to the next trial.
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    KeyboardComponent key_instr_test
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine show_answer_prompt
    CodeComponent skip_prompt
      Code Type = JS
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      Each JS Frame:
        if (learn_method !== "test" || test.length === 0) {
            continueRoutine = false;
        }
    PolygonComponent no
      fillColor = $[1,1,1]
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent yes
      fillColor = $[1,1,1]
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent would_you_like
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Would you like to see the correct answer?
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    MouseComponent yes_or_no
      clickable = no,yes
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent no_text
      color = black
      letterHeight = 0.2
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = No
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    TextComponent yes_text
      color = black
      letterHeight = 0.2
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = Yes
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  Routine instr_assess
    TextComponent instr_assess_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please type in the English translation for the Swahili word in the space below. Select "enter" to move on to the next trial.
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    KeyboardComponent instr_assess_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine assess
    CodeComponent assess_code
      Code Type = JS
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      End JS Routine:
        psychoJS.experiment.addData("test_response.resp", userinput);
        if ((userinput === swa)) {
            psychoJS.experiment.addData("test_response.eval", "correct");
        } else {
            psychoJS.experiment.addData("test_response.eval", "incorrect");
        }
    CodeComponent assess_input
      Code Type = JS
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      Begin JS Routine:
        psychoJS.eventManager.clearEvents("keyboard");
        userinput = "";
      Each JS Frame:
        keys = psychoJS.eventManager.getKeys();
        if (keys.length > 0) {
            if ((isalpha(keys[0]) && (keys[0].length === 1))) {
                userinput += keys[0].toUpperCase();
            } else {
                if ((keys[0] === "backspace")) {
                    userinput = userinput.slice(0, (- 1));
                } else {
                    if ((keys[0] === "escape")) {
                        win.close();
                        psychoJS.quit();
                    } else {
                        if ((((keys[0] === "return") && ((psychoJS.monotonicClock.getTime() - duration_start) > 0.25)) && (userinput.length > 0))) {
                            continueRoutine = false;
                        }
                    }
                }
            }
        }
    PolygonComponent assess_card
      fillColor = $[1,1,1]
      pos = (0, 0.2)
      shape = rectangle
      size = (0.7, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent assess_text_box
      fillColor = $[1,1,1]
      pos = (0, -0.3)
      shape = rectangle
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent assess_card_text
      color = black
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $eng
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    TextComponent assess_input_text
      color = black
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $userinput
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    CodeComponent assess_duration
      Code Type = JS
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      Begin JS Routine:
        duration_start = psychoJS.monotonicClock.getTime();
      End JS Routine:
        psychoJS.experiment.addData("duration", (psychoJS.monotonicClock.getTime() - duration_start));
  Routine transfer
    VariableComponent picked
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    VariableComponent correct
      startRoutineValue = randint(3)
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    CodeComponent init_correct
      Code Type = Both
      Begin JS Routine:
        correct = parseInt(Math.random()*3);
    CodeComponent validate
      Code Type = Both
      End JS Routine:
        if (a.contains(select_word)) {
            picked = a_text;
        } else {
            if (b.contains(select_word)) {
                picked = b_text;
            } else {
                picked = c_text;
            }
        }
        psychoJS.experiment.addData("transfer_response.resp", picked.text);
        if (((((correct === 0) && (picked === a_text)) || ((correct === 1) && (picked === b_text))) || ((correct === 2) && (picked === c_text)))) {
            psychoJS.experiment.addData("transfer_response.eval", "correct");
        } else {
            psychoJS.experiment.addData("transfer_response.eval", "incorrect");
        }
      End Routine:
        if a.contains(select_word.getPos()):
            picked=a_text
        elif b.contains(select_word.getPos()):
            picked=b_text
        else:
            picked=c_text

        thisExp.addData("transfer_response.resp",picked.text)
        if (correct == 0 and picked==a_text) or (correct == 1 and picked==b_text) or (correct == 2 and picked==c_text):
            thisExp.addData("transfer_response.eval","correct")
        else:
            thisExp.addData("transfer_response.eval","incorrect")
    CodeComponent set_up_answers
      Code Type = Both
      Begin JS Routine:
        function getOther(taken) {
            var possible;
            while (true) {
                possible = answers[parseInt(Math.random()*answers.length)];
                for (var answer_index = 0; answer_index<taken.length; answer_index++) {
                    var answer = taken[answer_index];
                    if ((possible === answer)) {
                        possible = "";
                    }
                }
                if (possible !== "") {
                    return possible;
                }
            }
        }
        if (correct === 0) {
            a_text.setText(ans);
            b_text.setText(getOther([a_text.text]));
            c_text.setText(getOther([a_text.text, b_text.text]));
        } else {
            if (correct === 1) {
                b_text.setText(ans);
                a_text.setText(getOther([b_text.text]));
                c_text.setText(getOther([b_text.text, a_text.text]));
            } else {
                if (correct === 2) {
                    c_text.setText(ans);
                    a_text.setText(getOther([c_text.text]));
                    b_text.setText(getOther([c_text.text, a_text.text]));
                }
            }
        }
      Begin Routine:
        def getOther(taken):
            while True:
                possible = answers[randint(len(answers))]
                for answer in taken:
                    if possible == answer:
                        possible = ""
                if possible != "":
                    return possible

        if correct == 0:
            a_text.setText(ans)
            b_text.setText(getOther([a_text.text]))
            c_text.setText(getOther([a_text.text,b_text.text]))
        elif correct == 1:
            b_text.setText(ans)
            a_text.setText(getOther([b_text.text]))
            c_text.setText(getOther([b_text.text,a_text.text]))
        elif correct == 2:
            c_text.setText(ans)
            a_text.setText(getOther([c_text.text]))
            b_text.setText(getOther([c_text.text,a_text.text]))
    PolygonComponent a
      fillColor = $[1,1,1]
      pos = (-0.5, -0.5)
      shape = rectangle
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent b
      fillColor = $[1,1,1]
      pos = (0, -0.5)
      shape = rectangle
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent c
      fillColor = $[1,1,1]
      pos = (0.5, -0.5)
      shape = rectangle
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent a_text
      color = black
      letterHeight = 0.1
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.0
      text = atext
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    TextComponent b_text
      color = black
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = btext
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    TextComponent c_text
      color = black
      letterHeight = 0.1
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      text = btext
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    TextComponent sentence
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $sen
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    TextComponent transfer_text
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text = Choose the Swahili word that would complete this English sentence.
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    MouseComponent select_word
      clickable = a,b,c
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine finish
    TextComponent finish_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Please press enter to process your data from this task, and then return to the email to complete the rest of the study.
    KeyboardComponent end_experiment
      allowedKeys = 'return','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine ans_gen
    CodeComponent add_ans
      Code Type = Both
      Begin JS Routine:
        answers.push(ans);
      Begin Routine:
        answers.append(ans)
  Routine instr
    CodeComponent imports
      Code Type = Both
      Begin Experiment:
        from datetime import timedelta
        from datetime import datetime
    VariableComponent learn_method
      startExpValue = "study"
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    VariableComponent card_to_show
      startExpValue = "Card not found"
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    VariableComponent active_cards
      startExpValue = []
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    VariableComponent duration_start
      saveEndRoutine = False
      startRoutineValue = "this parameter doesn't actually work"
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    VariableComponent waiting
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    VariableComponent study
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    VariableComponent test
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    VariableComponent userinput
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    VariableComponent card_index
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    VariableComponent size_at_start
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    VariableComponent answers
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    VariableComponent instr_num
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    VariableComponent image_name
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    VariableComponent active_cards_length
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    VariableComponent isalpha
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    KeyboardComponent done_with_instructions
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent variable_declaration
      Code Type = JS
      Begin JS Experiment:
        waiting = [];
        study = [];
        test = [];
        userinput = "";
        card_index = 0;
        size_at_start = waiting.length;
        answers = [];
        instr_num = 0;
        iteration = 0;
        conditions = [];
        image_name = "";
    CodeComponent set_conditions
      Code Type = JS
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      Begin JS Experiment:
        /*each line corresponds to a condition,
        each string in the parentheses should be a filename
        present in html/resources */
        conditions = [["cond1.jpg"],
        ["cond2a.jpg", "cond2b.jpg"],
        ["cond3.jpg"],
        ["cond4a.jpg", "cond4b.jpg"]];
        condition = Math.floor(Math.random()*conditions.length);
        psychoJS.experiment.addData("condition", condition+1);
    CodeComponent set_instruction
      Code Type = JS
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      Begin JS Routine:
        image_name = conditions[condition][iteration];
      End JS Routine:
        /* if iteration is at len(condimages)-1, finish routine, otherwise increment */
        iteration += 1;
        if (iteration >= conditions[condition].length) {
            instr_loop.finished = true;
        }
    ImageComponent instruction
      image [set every repeat] = $image_name
      size = 1
      startVal [time (s)] = 0.0
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  Routine consent
    TextComponent consent_text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        LETTER OF CONSENT
        Dear participant:

        This quarter, under the direction of Professor Simone in the Department of Psychology at Santa Clara University, we are conducting a research study to examine learning strategies and remembering in college students.

        We are requesting your participation, which will involve learning 20 English-Swahili translations on a computer and will take no more than one hour of your time. Your participation in this study is voluntary.  If you choose not to participate or to withdraw from the study at any time, there will be no penalty. It will not affect your grade. The results of the research study may be published, but your name will not be used.

        Although there may be no direct benefit to you, the possible benefit of your participation is better understanding of strategies students choose to use when learning something new.

        If you have any questions concerning the research study, please call Dr. Simone at (408) 554 – 4577.
        If you have any questions about your rights as a subject/participant in this research, or if you feel you have been placed at risk, you can contact the Chair of the Human Subjects Committee, through the Office of Research Compliance and Integrity at (408) 554-5591.

        By pressing “Enter”, which will begin to run the computer program, you certify that you are at least 18 years old and are giving consent to participate in the study described here.
    KeyboardComponent consent_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_learning
    TextComponent instr_learning_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        We will now begin with the learning phase.

        Please make sure to sort your word-cards into the study or test categories.

        If you feel confident about the word and its translation, put the word in the finish pile.

        Please take a moment to put your phone on Do Not Disturb or to put it away.

        PRESS 'Enter' TO CONTINUE
    KeyboardComponent instr_learning_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_movie
    KeyboardComponent instr_movie_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instr_movie_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        We will now begin a short 15 minute Ted talk.

        Before you press enter, make sure your volume is on and if you want, plug in your headphones.

        Please pay attention to the video, you will be asked questions at the end of this study.

        Press 'ENTER' to start the video.
  Routine movie
    MovieComponent moviestim
      backend = moviepy
      forceEndRoutine = False
      movie = movie.mp4
      size = 1.5
      startVal [time (s)] = 0
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  Routine instr_transfer
    TextComponent instr_transfer_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = In the next part of the test, you will choose the Swahili word that completes the English sentence.
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    KeyboardComponent instr_transfer_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine consent
  LoopInitiator instr_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 1000
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    Routine instr
  LoopTerminator instr_loop
  Routine instr_learning
  LoopInitiator card_gen_loop loopType="TrialHandler"
    conditionsFile = cards.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('swa', 'MPILIPILI'), ('eng', 'PEPPER')]),
      OrderedDict([('swa', 'ATHARI'), ('eng', 'SPOT')]),
      OrderedDict([('swa', 'AKIFU'), ('eng', 'REJECT')]),
      OrderedDict([('swa', 'LINGANA'), ('eng', 'EQUAL')]),
      OrderedDict([('swa', 'KIPENYO'), ('eng', 'BREAK')]),
      OrderedDict([('swa', 'KIBARAMWEZI'), ('eng', 'TOY')]),
      OrderedDict([('swa', 'TAADABU'), ('eng', 'BEHAVE')]),
      OrderedDict([('swa', 'DHIBTI'), ('eng', 'DEFEND')]),
      OrderedDict([('swa', 'SAMAKI'), ('eng', 'FISH')]),
      OrderedDict([('swa', 'WAMBA'), ('eng', 'CLOUDY')]),
      OrderedDict([('swa', 'KIOO'), ('eng', 'MIRROR')]),
      OrderedDict([('swa', 'JANI'), ('eng', 'GRASS')]),
      OrderedDict([('swa', 'SAILIWA'), ('eng', 'EXAMINE')]),
      OrderedDict([('swa', 'ROSHANI'), ('eng', 'BALCONY')]),
      OrderedDict([('swa', 'WALA'), ('eng', 'HOWEVER')]),
      OrderedDict([('swa', 'PAPARA'), ('eng', 'HURRY')]),
      OrderedDict([('swa', 'BAGHAMI'), ('eng', 'STUPID')]),
      OrderedDict([('swa', 'GARI'), ('eng', 'CAR')]),
      OrderedDict([('swa', 'MENEJA'), ('eng', 'DIRECTOR')]),
      OrderedDict([('swa', 'RANGI'), ('eng', 'PAINT')])]
    Routine card_gen
  LoopTerminator card_gen_loop
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine initialize_trial
    LoopInitiator choices loopType="TrialHandler"
      loopType = sequential
      nReps = 1000
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      Routine choice
      Routine interpret_choice
    LoopTerminator choices
    Routine pick_deck
    Routine interpret_pick
    LoopInitiator learn_loop loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine init_active_cards
      Routine instr_study
      LoopInitiator study_loop loopType="TrialHandler"
        loopType = random
        nReps = active_cards_length
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        Routine studying
      LoopTerminator study_loop
      Routine instr_test
      LoopInitiator test_loop loopType="TrialHandler"
        loopType = random
        nReps = active_cards_length
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        Routine testing
        Routine show_answer_prompt
        Routine show_answer
      LoopTerminator test_loop
      Routine change_method
    LoopTerminator learn_loop
  LoopTerminator trials
  Routine instr_movie
  Routine movie
  Routine ready
  Routine instr_assess
  LoopInitiator assess_loop loopType="TrialHandler"
    conditionsFile = cards.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('swa', 'MPILIPILI'), ('eng', 'PEPPER')]),
      OrderedDict([('swa', 'ATHARI'), ('eng', 'SPOT')]),
      OrderedDict([('swa', 'AKIFU'), ('eng', 'REJECT')]),
      OrderedDict([('swa', 'LINGANA'), ('eng', 'EQUAL')]),
      OrderedDict([('swa', 'KIPENYO'), ('eng', 'BREAK')]),
      OrderedDict([('swa', 'KIBARAMWEZI'), ('eng', 'TOY')]),
      OrderedDict([('swa', 'TAADABU'), ('eng', 'BEHAVE')]),
      OrderedDict([('swa', 'DHIBTI'), ('eng', 'DEFEND')]),
      OrderedDict([('swa', 'SAMAKI'), ('eng', 'FISH')]),
      OrderedDict([('swa', 'WAMBA'), ('eng', 'CLOUDY')]),
      OrderedDict([('swa', 'KIOO'), ('eng', 'MIRROR')]),
      OrderedDict([('swa', 'JANI'), ('eng', 'GRASS')]),
      OrderedDict([('swa', 'SAILIWA'), ('eng', 'EXAMINE')]),
      OrderedDict([('swa', 'ROSHANI'), ('eng', 'BALCONY')]),
      OrderedDict([('swa', 'WALA'), ('eng', 'HOWEVER')]),
      OrderedDict([('swa', 'PAPARA'), ('eng', 'HURRY')]),
      OrderedDict([('swa', 'BAGHAMI'), ('eng', 'STUPID')]),
      OrderedDict([('swa', 'GARI'), ('eng', 'CAR')]),
      OrderedDict([('swa', 'MENEJA'), ('eng', 'DIRECTOR')]),
      OrderedDict([('swa', 'RANGI'), ('eng', 'PAINT')])]
    Routine assess
  LoopTerminator assess_loop
  LoopInitiator ans_gen_loop loopType="TrialHandler"
    conditionsFile = transfer.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('sen', 'start _____ finish'), ('ans', 'MPILIPILI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'ATHARI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'AKIFU')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'LINGANA')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'KIPENYO')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'KIBARAMWEZI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'TAADABU')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'DHIBTI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'SAMAKI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'WAMBA')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'KIOO')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'JANI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'SAILIWA')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'ROSHANI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'WALA')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'PAPARA')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'BAGHAMI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'GARI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'MENEJA')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'RANGI')])]
    Routine ans_gen
  LoopTerminator ans_gen_loop
  Routine instr_transfer
  LoopInitiator transfers loopType="TrialHandler"
    conditionsFile = transfer.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sen', 'start _____ finish'), ('ans', 'MPILIPILI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'ATHARI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'AKIFU')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'LINGANA')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'KIPENYO')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'KIBARAMWEZI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'TAADABU')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'DHIBTI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'SAMAKI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'WAMBA')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'KIOO')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'JANI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'SAILIWA')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'ROSHANI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'WALA')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'PAPARA')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'BAGHAMI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'GARI')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'MENEJA')]),
      OrderedDict([('sen', 'start _____ finish'), ('ans', 'RANGI')])]
    Routine transfer
  LoopTerminator transfers
  Routine finish
